# Micro-Manager Configuration for Ludl MAC 2000
# Generated: 2026-02-18 19:21:25
# SemiAnalysis - Die Mapping System

# Reset
Property,Core,Initialize,0

# Serial Port
Device,LudlPort,SerialManager,COM3
Property,LudlPort,BaudRate,9600
Property,LudlPort,StopBits,2
Property,LudlPort,Parity,None
Property,LudlPort,DataBits,8
Property,LudlPort,Handshaking,Off
Property,LudlPort,DelayBetweenCharsMs,10
Property,LudlPort,AnswerTimeout,2000.0

# Ludl Controller
Device,LudlController,Ludl,LudlController
Property,LudlController,Port,LudlPort

# XY Stage
Device,LudlXY,Ludl,XYStage
Property,LudlXY,Port,LudlPort

# Z (Focus) Stage
Device,LudlZ,Ludl,Stage
Property,LudlZ,Port,LudlPort

# Initialize all devices
Property,Core,Initialize,1

# Roles
Property,Core,XYStage,LudlXY
Property,Core,Focus,LudlZ

# Focus direction
FocusDirection,LudlZ,0

